PsychoPy2experiment version="2023.2.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  HTML path = Documents
  Monitor = testMonitor
  Screen = 1
  Show info dlg = False
  Units = deg
  Window size (pixels) = [1920, 1080]
  color = $[-0.25,-0.25,-0.25]
  expName = BFTUS_task_with_instructions_v3
  keyboardBackend = ioHub
  runMode = 1
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Routines
  Routine action_outcome_delay
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    PolygonComponent fix_cross
      fillColor = white
      saveStartStop = False
      shape = cross
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    CodeComponent set_wait_time
      Code Type = Py
      Begin Routine:
        # ranging between AO_min and AO_max seconds
        AO = AO_min + (AO_max - AO_min)*random.random()
    CodeComponent track_AO
      Code Type = Py
      Begin Routine:
        AO_clock = core.Clock()
      Each Frame:
        if AO_clock.getTime() >= AO:
            continueRoutine = False
  Routine reward_reveal
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    TextComponent current_win_text
      color = $element_color
      letterHeight = letter_height
      startVal [time (s)] = 0.0
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    CodeComponent calculate_reward
      Code Type = Py
      Begin Routine:
        # TODO: yes or no based on bubble size

        current_win_text.depth = -10

        if current_i + 1 > len(p_noisy):
            reward_prob = 0 # waited until end of trial
        else:
            reward_prob = p_noisy[current_i]

        rand_float = random.random()
        if rand_float > reward_prob:
            reward = False
            current_win_text.text = "+ 0" # ""
            bb.sendMarker(val=200)
        else:
            reward = True
            # reward_sound.play()
            current_win_text.text = f"+ {reward_size}"
            score += reward_size
            bb.sendMarker(val=210)
    CodeComponent store_reward_info
      Code Type = Py
      End Routine:
        thisExp.addData('reward', reward)
        thisExp.addData('reward_size', reward_size)
        thisExp.addData('reward_chance_endpoint', p_end)
        thisExp.addData('snr_db', snr_db)

        thisExp.nextEntry()
    CodeComponent calc_reward_reveal_time
      Code Type = Py
      Begin Routine:
        reward_reveal_time = 1.0
        jitter          = np.random.uniform(-0.1, +0.1)
        reward_reveal_time += jitter
      Each Frame:
        if t > reward_reveal_time:
            continueRoutine = False
    CodeComponent store_GIF_reward_reveal
      Code Type = Py
      disabled = True
      Each Frame:
        win.getMovieFrame()
      End Routine:
        win.saveMovieFrames('trial_gifs/full_trial.gif')
    CodeComponent update_outline_cont3
      Code Type = Py
      Each Frame:
        progress_perc = global_clock.getTime()/task_time

        start_angle = np.pi / 2
        end_angle = start_angle + 2 * np.pi * max(0, (1 - progress_perc))

        theta = np.linspace(start_angle, end_angle, 100)

        vertices = [(radius * np.cos(t), radius * np.sin(t)) for t in theta]

        outline.vertices = vertices
    CodeComponent check_for_break
      Code Type = Py
      End Routine:
        # check if it is time for a break
        if (global_clock.getTime() - task_start_time) // block_dur > breaks_given:
            trials.finished = True
    CodeComponent hide_rewardbar
      Code Type = Py
      Begin Routine:
        rewardbar.opacity = 0
        cross.opacity = 0
        pointer.opacity = 0
        pointer_blocker.opacity = 0
      End Routine:
        rewardbar.opacity = 1
        cross.opacity = 1
    CodeComponent track_exp_time
      Code Type = Py
      End Routine:
        if global_clock.getTime() >= task_time:
            trials.finished = True
  Routine goodbye_screen
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    TextComponent money_reveal_text
      color = element_color
      letterHeight = letter_height
      saveStartStop = False
      startVal [time (s)] = 0
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      text:
        The task is over.
        In this session, you have made a total of ...€. Congratulations!

        The experimenter will approach you shortly.
    KeyboardComponent quit_exp
      allowedKeys = 'e'
      forceEndRoutine = True
      startVal [time (s)] = 1.0
      store = nothing
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    CodeComponent adjust_money_amount_display
      Code Type = Py
      Begin Routine:
        pointer.opacity = 0
        pointer_blocker.opacity = 0
        outline.opacity = 0
        outline_bg.opacity = 0
        rewardbar.opacity = 0
        cross.opacity = 0
      Each Frame:
        money_reveal_text.text = f"The task is over.\nIn this session, you have made a total of {money_amount:.2f}€. Congratulations!\n\nThe experimenter will approach you shortly."
  Routine resting_state
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    PolygonComponent fix_cross_resting_1
      fillColor = white
      saveStartStop = False
      shape = cross
      size = (pointer_len/4, pointer_len/4)
      startVal [time (s)] = 0
      stopVal [duration (s)] = $resting_dur
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  Routine TUS
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    PolygonComponent fix_cross_TUS
      fillColor = white
      shape = cross
      size = (pointer_len/4, pointer_len/4)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1
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  Routine experimenter_input
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    TextComponent waiting_for_input_text
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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    KeyboardComponent experimenter_continue
      allowedKeys = 'e'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine baseline_blink
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    CodeComponent calc_baseline_time_2
      Code Type = Py
      Begin Routine:
        baseline_time = 1.2
        jitter          = np.random.uniform(-0.2, +0.2)
        baseline_time += jitter
      Each Frame:
        if t > baseline_time:
            continueRoutine = False
    PolygonComponent fix_cross_baseline_2
      fillColor = $element_color
      lineColor = None
      opacity = 0
      shape = cross
      size = (disk_r/2, disk_r/2)
      startVal [time (s)] = 0.0
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  Routine reward_size_cue
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    TextComponent blank_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.6
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    CodeComponent setup_inner
      Code Type = Py
      Begin Experiment:
        # Begin Experiment
        inner = visual.ShapeStim(
                win=win, name='inner',
                size=(0,0), vertices='circle',
                ori=0.0, pos=(0, 0), anchor='center',
                lineWidth=line_thickness,     colorSpace='rgb',  lineColor=None, fillColor=element_color,
                opacity=None, depth=0.0, interpolate=True)

        inner.depth = -3

        px_per_deg     = win.size[0] / win.monitor.getWidth()
        usable_r       = disk_r - (line_thickness/2) / px_per_deg
        inner_r_min    = inner_min_frac * usable_r
        inner_r_max    = inner_max_frac * usable_r
      Begin Routine:
        inner.setAutoDraw(False)
        inner_radius_start = inner_r_min + (inner_r_max-inner_r_min) * 0.5
        inner.size  = (inner_radius_start, inner_radius_start)
        inner.opacity = 1
    CodeComponent set_reward_size
      Code Type = Py
      Begin Experiment:
        reward_size_colors = {
            3: [ 1.0,  0.68, -1.0 ],
            2:  [ 0.5,  0.5,  0.5  ],
            1: [ 0.6,  0.0, -0.6  ]
            }


        """
        cent_colors = {
            10: hex_to_psychopy_rgb("#D4B03E"),
            5: hex_to_psychopy_rgb("#B0B0B4"),
            2: hex_to_psychopy_rgb("#D1A679")

            }
        """
      Begin Routine:
        if tutorial:
            reward_size = reward_sizes[0]
        else:
            reward_size = random.choice(reward_sizes)
            bb.sendMarker(val=100+reward_size)

        inner.color = reward_size_colors[reward_size]
        rewardbar.color = reward_size_colors[reward_size]

        pointer.opacity = 1
        pointer_blocker.opacity = 1
    CodeComponent store_GIF_reward_size_cue
      Code Type = Py
      disabled = True
      Each Frame:
        win.getMovieFrame()
      End Routine:
        # win.saveMovieFrames('trial_gifs/2_reward_size_cue.gif')
    CodeComponent update_outline
      Code Type = Py
      Each Frame:
        progress_perc = global_clock.getTime()/task_time

        start_angle = np.pi / 2
        end_angle = start_angle + 2 * np.pi * max(0, (1 - progress_perc))

        theta = np.linspace(start_angle, end_angle, 100)

        vertices = [(radius * np.cos(t), radius * np.sin(t)) for t in theta]

        outline.vertices = vertices
  Routine decision_window
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    CodeComponent update_searchloc
      Code Type = Py
      Begin Routine:
        inner.depth = -3

        # ---------- probability path ----------
        if tutorial:
            p_end          = tut_reward_chance_endpoints[tutorial_showcases.thisN]
        else:
            p_end          = random.choice(reward_chance_endpoints)
        p_lin          = np.linspace(0.5, p_end, n_samples)
        snr_db         = random.choice(snr_db_levels)
        noise          = np.random.normal(0,
                             np.sqrt(np.mean(p_lin**2)) / (10**(snr_db/20)),
                             p_lin.shape)
        p_noisy        = np.clip(p_lin + noise, 0, 1)

        # ---------- inner-dot radii ----------

        # other version:

        # def p_to_diameter(p, d_min, d_max):
        #     """
        #     p 0-1 → diameter with equal annulus-area steps
        #     d_min, d_max in same units as ShapeStim.size
        #     """
        #     p      = np.clip(p, 0, 1)
        #     r_min  = d_min / 2
        #     r_max  = d_max / 2
        #     r      = np.sqrt(r_min**2 + p * (r_max**2 - r_min**2))
        #     return 2 * r
        #
        # inner_radii = p_to_diameter(p_noisy, inner_r_min, inner_r_max) # careful: misnomer: actually, "r" should be "d" (diameter)

        # old version:

        # inner_radii    = inner_r_min + (inner_r_max-inner_r_min) * p_noisy

        inner_radii = pointer_len*p_noisy

        # ---------- flash schedule ----------
        on_dur        = dec_win_base + np.random.uniform(-dec_win_jitter_rng,
                                                         +dec_win_jitter_rng,
                                                         n_samples)      # ON per flash
        soa           = on_dur + flash_off_dur                          # ON + OFF
        flash_onsets  = np.cumsum(np.concatenate(([0], soa[:-1])))
        flash_offsets = flash_onsets + on_dur

        # ---------- pointer setup ------------
        angle_step     = 360 / (n_samples-1)          # CCW 9 → 3 o’clock
        pointer.pos    = (0, 0)                       # anchored at centre

        current_i      = -1                           # “no flash yet”

        sweep_dur = flash_onsets[-1] + soa[-1]
        deg_per_sec       = sweep_span / sweep_dur  # constant angular speed
      Each Frame:
        pointer.ori   = pointer_start_angle + deg_per_sec * t          # continuous CCW sweep
        pointer_blocker.ori   = pointer_start_angle + deg_per_sec * t
        rewardbar.ori = pointer_start_angle + deg_per_sec * t
        # cross.ori = pointer_start_angle + deg_per_sec * t

        pointer.pos   = (0, 0)
        rewardbar.pos = (0, 0)

        # t = Builder’s routine clock

        # ------- start next flash -----------
        if current_i + 1 < n_samples and t >= flash_onsets[current_i + 1]:

            bb.sendMarker(val=110 + int(p_end*10))

            current_i += 1

            # inner rewardbar appears
            rewardbar.height = inner_radii[current_i]
            rewardbar.opacity = 1

            # inner-dot appears
            inner.size  = (inner_radii[current_i], inner_radii[current_i])
            inner.opacity = 1

        # ------- end flash ------------------
        if current_i >= 0 and t >= flash_offsets[current_i]:
            inner.opacity = 0      # hide inner dot
            rewardbar.opacity = 0

        # ------- end trial ----------------------------------------
        if t > sum(soa):
            current_i += 1
            continueRoutine = False
    TextComponent DEBUG
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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    KeyboardComponent give_response
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent store_DVs
      Code Type = Py
      End Routine:
        thisExp.addData('rt_ms', t*1000)
        thisExp.addData('sample_ind', int(current_i))
        if current_i + 1 <= n_samples:
            thisExp.addData('likelihood', p_noisy[current_i])
        else:
            thisExp.addData('likelihood', 0)
        thisExp.addData('likelihoods', list(p_noisy))
    CodeComponent store_GIF_decision_window
      Code Type = Py
      disabled = True
      Each Frame:
        win.getMovieFrame()
      End Routine:
        # win.saveMovieFrames('trial_gifs/3_decision_window.gif')
    CodeComponent update_outline_cont1
      Code Type = Py
      Each Frame:
        progress_perc = global_clock.getTime()/task_time

        start_angle = np.pi / 2
        end_angle = start_angle + 2 * np.pi * max(0, (1 - progress_perc))

        theta = np.linspace(start_angle, end_angle, 100)

        vertices = [(radius * np.cos(t), radius * np.sin(t)) for t in theta]

        outline.vertices = vertices
    CodeComponent trigger_action_decision
      Code Type = Py
      End Routine:
        bb.sendMarker(val=220)
  Routine hold
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    TextComponent blank_post_response
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
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    CodeComponent store_GIF_hold
      Code Type = Py
      disabled = True
      Each Frame:
        win.getMovieFrame()
      End Routine:
        # win.saveMovieFrames('trial_gifs/4_hold.gif')
    CodeComponent update_outline_cont2
      Code Type = Py
      Each Frame:
        progress_perc = global_clock.getTime()/task_time

        start_angle = np.pi / 2
        end_angle = start_angle + 2 * np.pi * max(0, (1 - progress_perc))

        theta = np.linspace(start_angle, end_angle, 100)

        vertices = [(radius * np.cos(t), radius * np.sin(t)) for t in theta]

        outline.vertices = vertices
  Routine trial_baseline
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    CodeComponent calc_progress_perc
      Code Type = Py
      Begin Routine:
        progress_perc = global_clock.getTime()/task_time
    CodeComponent calc_baseline_time
      Code Type = Py
      Begin Routine:
        baseline_time = 1.5
        jitter          = np.random.uniform(-0.1, +0.1)
        baseline_time += jitter
      Each Frame:
        if t > baseline_time:
            continueRoutine = False
    CodeComponent show_disk
      Code Type = Py
      Begin Routine:
        # disk.setAutoDraw(True)
    PolygonComponent fix_cross_baseline
      fillColor = $element_color
      lineColor = None
      opacity = 0
      shape = cross
      size = (disk_r/2, disk_r/2)
      startVal [time (s)] = 0.0
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    CodeComponent setup_pointer
      Code Type = Py
      Begin Experiment:
        # Begin Experiment
        pointer = visual.Rect(win, width=w_deg, height=pointer_len,
                              anchor='bottom-center', fillColor=element_color, ori=pointer_start_angle)

        pointer_blocker = visual.Rect(win, width=w_deg*3, height=pointer_len*0.9,
                              anchor='bottom-center', fillColor=(-0.25,-0.25,-0.25), ori=pointer_start_angle)

        pointer.depth = -1
        pointer_blocker.depth = -2
      Begin Routine:
        pointer.setOri(pointer_start_angle)
        pointer.setAutoDraw(True)
        pointer.opacity = 0

        pointer_blocker.setOri(pointer_start_angle)
        pointer_blocker.setAutoDraw(True)
        pointer_blocker.opacity = 0
    CodeComponent setup_outline
      Code Type = Py
      Begin Experiment:
        outline = visual.ShapeStim(
                win=win, name='outline',
                size=(pointer_len*2,pointer_len*2),
                # size=(disk_r*inner_max_frac,disk_r*inner_max_frac),
                vertices='circle',
                ori=0.0, pos=(0, 0), anchor='center',
                lineWidth=line_thickness/2,     colorSpace='rgb',  lineColor=element_color, fillColor=None,
                opacity=None, depth=0.0, interpolate=True)

        outline_bg = visual.ShapeStim(
                win=win, name='outline',
                size=(pointer_len*2,pointer_len*2),
                # size=(disk_r*inner_max_frac,disk_r*inner_max_frac),
                vertices='circle',
                ori=0.0, pos=(0, 0), anchor='center',
                lineWidth=line_thickness/2,     colorSpace='rgb',  lineColor=[e*0.5 for e in element_color], fillColor=None,
                opacity=None, depth=0.0, interpolate=True)

        outline.closeShape = False

        # TODO maybe have to set depth to specific value, e.g.:
        outline.depth = -7
        outline_bg.depth = - 6
      Begin Routine:
        outline.setOri(pointer_start_angle)
        outline.setAutoDraw(True)

        outline_bg.setOri(pointer_start_angle)
        outline_bg.setAutoDraw(True)
      Each Frame:
        progress_perc = global_clock.getTime()/task_time

        start_angle = np.pi / 2
        end_angle = start_angle + 2 * np.pi * max(0, (1 - progress_perc))

        theta = np.linspace(start_angle, end_angle, 100)
        radius = pointer_len
        vertices = [(radius * np.cos(t), radius * np.sin(t)) for t in theta]

        outline.vertices = vertices
        outline.size = (1,1)
    CodeComponent store_GIF_baseline
      Code Type = Py
      disabled = True
      Each Frame:
        win.getMovieFrame()
      End Routine:
        # win.saveMovieFrames('trial_gifs/1_baseline.gif')
    ProgressComponent time_left
      borderColor = white
      disabled = True
      fillColor = None
      pos = (0, -1)
      progress [set every repeat] = 0.5
      size = (1.0, letter_height/2)
      startVal [time (s)] = 0
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    PolygonComponent time_left_bar_frame
      disabled = True
      fillColor = None
      pos = (0, -1)
      shape = rectangle
      size = (1.0, letter_height/2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    PolygonComponent time_left_bar
      anchor = center-left
      disabled = True
      fillColor = white
      lineColor = None
      pos = (-1.0/2, -1)
      shape = rectangle
      size [set every frame] = (1.0*(1 - progress_perc), letter_height/2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    CodeComponent setup_rewardbar
      Code Type = Py
      Begin Experiment:
        # Begin Experiment
        rewardbar = visual.Rect(win, width=w_deg*3, height=pointer_len*0.5,
                              anchor='bottom-center', fillColor=element_color, ori=pointer_start_angle)

        rewardbar.depth = -3
      Begin Routine:
        rewardbar.setOri(pointer_start_angle)
        rewardbar.setAutoDraw(True)

        rewardbar.opacity = 0
      End Routine:
        rewardbar.ori = pointer_start_angle
        rewardbar.height = pointer_len*0.5
        rewardbar.opacity = 1
    CodeComponent setup_crosshair
      Code Type = Py
      Begin Experiment:
        cross = visual.ShapeStim(
            win=win, name='fix_cross_baseline', vertices='cross',
            size=(pointer_len/4, pointer_len/4),
            ori=0.0, pos=(0, 0), anchor='center',
            lineWidth=0,     colorSpace='rgb',  lineColor=None, fillColor=element_color,
            depth=10.0, interpolate=True)

        cross.depth = -4
      Begin Routine:
        cross.setAutoDraw(True)
        cross.ori = pointer_start_angle
    CodeComponent trigger_trial_baseline_start
      Code Type = Py
      Begin Routine:
        bb.sendMarker(val=10)
  Routine init_vars
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    VariableComponent n_reward_chance_endpoints
      startExpValue = 6
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    VariableComponent snr_db_levels
      startExpValue = [34] # [15, 23, 34, 51, 76]
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    VariableComponent task_time_minutes
      saveEndRoutine = False
      saveStartStop = False
      startExpValue = 2
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    VariableComponent n_samples
      startExpValue = 9
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    VariableComponent exp_scaling_factor
      startExpValue = 2.0
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    VariableComponent pointer_start_angle
      startExpValue = 0
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    VariableComponent letter_height
      startExpValue = 0.5
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    VariableComponent dec_win_base
      startExpValue = 0.8
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    VariableComponent dec_win_jitter_rng
      startExpValue = 0.05
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    VariableComponent flash_off_dur
      startExpValue = 0.1
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    VariableComponent disk_r
      startExpValue = 1.0
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    VariableComponent pointer_len
      startExpValue = 0.75
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    VariableComponent inner_min_frac
      startExpValue = 0.1
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    VariableComponent inner_max_frac
      startExpValue = 0.95
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    VariableComponent line_thickness
      startExpValue = 2
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    VariableComponent reward_sizes
      startExpValue = [1, 2, 3]
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    VariableComponent resting_dur
      startExpValue = 1
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    VariableComponent n_blocks
      startExpValue = 1
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    CodeComponent imports
      Code Type = Py
      Before Experiment:
        import random
        import numpy as np
        from psychopy import logging
    CodeComponent derive_vars
      Code Type = Py
      Begin Experiment:
        reward_chance_endpoints = np.linspace(0, 1, n_reward_chance_endpoints)

        block_dur = (task_time_minutes * 60)//n_blocks

        # apply global visual scaling factor

        line_thickness *= exp_scaling_factor
        pointer_len    *= exp_scaling_factor
        disk_r         *= exp_scaling_factor

        px_per_deg = win.size[0] / win.monitor.getWidth()   # ≈ 21 px/deg for your setup
        w_deg = (line_thickness/2) / px_per_deg                 # 3 px  → 0.14 deg

        # utility function
        def hex_to_psychopy_rgb(hexcode):
            hexcode = hexcode.lstrip('#')
            if len(hexcode) == 3:                       # allow shorthand
                hexcode = ''.join(ch*2 for ch in hexcode)
            if len(hexcode) != 6:
                raise ValueError('hex must be 3 or 6 digits')
            return [int(hexcode[i:i+2],16)/127.5-1 for i in (0,2,4)]
    VariableComponent element_color
      startExpValue = 0.75, 0.75, 0.75
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    VariableComponent sweep_span
      startExpValue = 360
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    CodeComponent init_EEG
      Code Type = Py
      Begin Experiment:
        class CLIMarker:

            def __init__(self):
                pass

            def sendMarker(self, val=20):
                print("marker received: ", val)

        from rusocsci import buttonbox

        try:
            bb = buttonbox.Buttonbox(port="COM1")
            bb.sendMarker(val=1)
        except:
            print("WARNING: no EEG device connected/detected - falling back to command line printing instead")
            bb = CLIMarker()
    VariableComponent break_dur
      startExpValue = 3
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    CodeComponent surpress_logging
      Code Type = Py
      Begin Experiment:
        from psychopy import logging
        logging.console.setLevel(logging.CRITICAL)
    CodeComponent init_counters
      Code Type = Py
      Begin Experiment:
        score = 0
        score_computer = 0
        progress_perc = 0
        breaks_given = 0

        # decrepit (should be safe to delete)
        money_amount = 0
      End Routine:
        global_clock = core.Clock()
        task_start_time = global_clock.getTime()
        task_time = task_time_minutes * 60  # convert to seconds
    CodeComponent init_instruction_text
      Code Type = Py
      Begin Routine:
        # Before experiment
        general_instruction_pages = [
            # Page 1
            (
               f"For the next {task_time_minutes} minutes you will sit infront of a clock that repeatedly offers you a chance to win bronze, silver or golden rewards.\n"
                "\n"
                "For any reward you manage to obtain, you will receive points which at the end of the experiment will be payed out as real money (€).\n"
                "\n"
                "bronze: worth 1 point\n"
                "silver: worth 2 points\n"
                "gold: worth 3 points\n"
                "\n"
                "Every point is worth 0.XX€ at the end of the experiment."
            ),

            # Page 2
            (
                "Every round, the clock starts running from 12 o'clock. You may choose at any point, until it completes a full circle, to go for the reward by pressing SPACE.\n"
                "\n"
                "Be careful, your chances of success will vary over time. As the clock ticks, the indicator will grow or shrink in size making it more or less likely for you to win.\n"
                "\n"
                "When you press SPACE, the clock determines whether or not you win the current reward. Then, the next round will start immediately."
            )
        ]

        tutorial_pages = [

            (
                "Your chances of success vary between trials. \n\n"
                "In this case, your odds increase over time. You might want to wait a moment for a better chance of winning. \n\n "
                "During the trial, press SPACE to go for the reward." #  Press E to start the demo.
            ),

            (
                "Your chances of success vary between trials. \n\n"
                "Careful, in this case, your odds are getting worse over time. \n\n "
                "During the trial, press SPACE to go for the reward." #  Press E to start the demo.
            ),

            (
                "Your chances of success vary between trials. \n\n"
                "It may not always be so easy to tell if your odds are getting better or worse ... \n\n "
                "During the trial, press SPACE to go for the reward." #  Press E to start the demo.
            )

        ]

        pre_task_pages = [

            (
                "While the clock is running, please always focus on the fixation cross!\n\n"
                "The size of the clock has been designed so everything will be visible to you without having to look away from the crosshair.\n\n"
               f"On the outer boundary of the clock you can see your overall time of {task_time_minutes} minutes slowly expire. "
               f"It is fully in your hands how many rounds you will play within the {task_time_minutes} min.\n\n"
               f"There will be {n_blocks - 1} breaks for you to relax."
            ),

        ]

        tut_reward_chance_endpoints = [1.0, 0.0, 0.5]
    VariableComponent tutorial
      startExpValue = True
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  Routine break_relax
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    TextComponent break_text
      color = $element_color
      letterHeight = letter_height
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $break_dur
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    TextComponent score_text
      letterHeight = letter_height
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $break_dur
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    CodeComponent update_break_text
      Code Type = Py
      Each Frame:
        """ # TODO alignment did not work.
        break_text.anchorText = 'center'
        score_text.anchorText = 'center'
        break_text.alignText = 'center'
        score_text.alignText = 'right'

        break_text.text = 'Short break!\n\n\n\n\nContinuing in...\n' + str(int(break_dur + 1 - t))
        score_text.text = f'\n\nYour score: {score}\nComputer\'s score: {score_computer}\n\n\n'

        text_width = score_text.size[0]
        score_text.pos = (-text_width / 4, 0) # guesstimated division number, could not understand maths behind it - and still does not look good. drop.

        #"""

        break_text.text = f'Short break!\n\nYour score: \n{score}\nComputer\'s score: \n{score_computer}\n\nContinuing in...\n' + str(int(break_dur + 1 - t))
    CodeComponent check_if_last
      Code Type = Py
      Begin Routine:
        breaks_given += 1

        if int(breaks_given) == int(n_blocks):
            continueRoutine = False
            breaks.finished = True
    CodeComponent hide_pointer_outline
      Code Type = Py
      Begin Routine:
        outline.opacity = 0
        outline_bg.opacity = 0
        rewardbar.opacity = 0
      End Routine:
        pointer.opacity = 1
        pointer_blocker.opacity = 1
        outline.opacity = 1
        outline_bg.opacity = 1
        cross.opacity = 1
  Routine instruction_trial_baseline
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    CodeComponent calc_progress_perc_2
      Code Type = Py
      Begin Routine:
        progress_perc = global_clock.getTime()/task_time
    PolygonComponent fix_cross_baseline_3
      fillColor = $element_color
      lineColor = None
      opacity = 0
      shape = cross
      size = (disk_r/2, disk_r/2)
      startVal [time (s)] = 0.0
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    CodeComponent setup_pointer_2
      Code Type = Py
      Begin Experiment:
        # Begin Experiment
        pointer = visual.Rect(win, width=w_deg, height=pointer_len,
                              anchor='bottom-center', fillColor=element_color, ori=pointer_start_angle)

        pointer_blocker = visual.Rect(win, width=w_deg*3, height=pointer_len*0.9,
                              anchor='bottom-center', fillColor=(-0.25,-0.25,-0.25), ori=pointer_start_angle)

        pointer.depth = -1
        pointer_blocker.depth = -2
      Begin Routine:
        pointer.setOri(pointer_start_angle)
        pointer.setAutoDraw(True)
        pointer.opacity = 0  # Make visible

        pointer_blocker.setOri(pointer_start_angle)
        pointer_blocker.setAutoDraw(True)
        pointer_blocker.opacity = 0  # Make visible
    CodeComponent setup_outline_2
      Code Type = Py
      Begin Experiment:
        outline = visual.ShapeStim(
                win=win, name='outline',
                size=(pointer_len*2,pointer_len*2),
                # size=(disk_r*inner_max_frac,disk_r*inner_max_frac),
                vertices='circle',
                ori=0.0, pos=(0, 0), anchor='center',
                lineWidth=line_thickness/2,     colorSpace='rgb',  lineColor=element_color, fillColor=None,
                opacity=None, depth=0.0, interpolate=True)

        outline_bg = visual.ShapeStim(
                win=win, name='outline',
                size=(pointer_len*2,pointer_len*2),
                # size=(disk_r*inner_max_frac,disk_r*inner_max_frac),
                vertices='circle',
                ori=0.0, pos=(0, 0), anchor='center',
                lineWidth=line_thickness/2,     colorSpace='rgb',  lineColor=[e*0.5 for e in element_color], fillColor=None,
                opacity=None, depth=0.0, interpolate=True)

        outline.closeShape = False

        # TODO maybe have to set depth to specific value, e.g.:
        outline.depth = -7
        outline_bg.depth = - 6
      Begin Routine:
        outline.setOri(pointer_start_angle)
        outline.setAutoDraw(True)
        outline.opacity = 0

        outline_bg.setOri(pointer_start_angle)
        outline_bg.setAutoDraw(True)
        outline_bg.opacity = 0
      Each Frame:
        progress_perc = global_clock.getTime()/task_time

        start_angle = np.pi / 2
        end_angle = start_angle + 2 * np.pi * max(0, (1 - progress_perc))

        theta = np.linspace(start_angle, end_angle, 100)
        radius = pointer_len
        vertices = [(radius * np.cos(t), radius * np.sin(t)) for t in theta]

        outline.vertices = vertices
        outline.size = (1,1)
    CodeComponent setup_rewardbar_2
      Code Type = Py
      Begin Experiment:
        # Begin Experiment
        rewardbar = visual.Rect(win, width=w_deg*3, height=pointer_len*0.5,
                              anchor='bottom-center', fillColor=element_color, ori=pointer_start_angle)

        rewardbar.depth = -3
      Begin Routine:
        rewardbar.setOri(pointer_start_angle)
        rewardbar.setAutoDraw(True)
        rewardbar.opacity = 0
      End Routine:
        rewardbar.ori = pointer_start_angle
        rewardbar.height = pointer_len*0.5
        rewardbar.opacity = 1
    CodeComponent setup_crosshair_2
      Code Type = Py
      Begin Experiment:
        cross = visual.ShapeStim(
            win=win, name='fix_cross_baseline', vertices='cross',
            size=(pointer_len/4, pointer_len/4),
            ori=0.0, pos=(0, 0), anchor='center',
            lineWidth=0,     colorSpace='rgb',  lineColor=None, fillColor=element_color,
            depth=10.0, interpolate=True)

        cross.depth = -4
      Begin Routine:
        cross.setAutoDraw(True)
        cross.ori = pointer_start_angle
        cross.opacity = 0
    TextComponent hint_text
      letterHeight = letter_height
      startVal [time (s)] = 0.0
      text [set every frame] = $tutorial_hint_text
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    KeyboardComponent start_demonstration
      allowedKeys = 'e'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine instruction_reward_size_cue
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    TextComponent blank_text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.6
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    CodeComponent setup_inner_2
      Code Type = Py
      Begin Experiment:
        # Begin Experiment
        inner = visual.ShapeStim(
                win=win, name='inner',
                size=(0,0), vertices='circle',
                ori=0.0, pos=(0, 0), anchor='center',
                lineWidth=line_thickness,     colorSpace='rgb',  lineColor=None, fillColor=element_color,
                opacity=None, depth=0.0, interpolate=True)

        inner.depth = -3

        px_per_deg     = win.size[0] / win.monitor.getWidth()
        usable_r       = disk_r - (line_thickness/2) / px_per_deg
        inner_r_min    = inner_min_frac * usable_r
        inner_r_max    = inner_max_frac * usable_r
      Begin Routine:
        inner.setAutoDraw(False)
        inner_radius_start = inner_r_min + (inner_r_max-inner_r_min) * 0.5
        inner.size  = (inner_radius_start, inner_radius_start)
        inner.opacity = 1
    CodeComponent set_reward_size_2
      Code Type = Py
      Begin Experiment:
        reward_size_colors = {
            3: [ 1.0,  0.68, -1.0 ],
            2:  [ 0.5,  0.5,  0.5  ],
            1: [ 0.6,  0.0, -0.6  ]
            }


        """
        cent_colors = {
            10: hex_to_psychopy_rgb("#D4B03E"),
            5: hex_to_psychopy_rgb("#B0B0B4"),
            2: hex_to_psychopy_rgb("#D1A679")

            }
        """
      Begin Routine:
        # This code goes in the Begin Routine tab of set_reward_size_2.

        # 1. Set reward to Bronze for the tutorial.
        reward_size = 1

        # 2. Set the color for the reward indicator.
        inner.color = reward_size_colors[reward_size]
        rewardbar.color = reward_size_colors[reward_size]

        # 3. Redundantly set visuals to opaque to maintain structural consistency.
        #    This is the "unnecessary step" but it's harmless and keeps the
        #    code comparable to the main trial logic.
        pointer.opacity = 1
        pointer_blocker.opacity = 1
        outline.opacity = 1
        outline_bg.opacity = 1
        cross.opacity = 1
        rewardbar.opacity = 1
    CodeComponent update_outline_2
      Code Type = Py
      Each Frame:
        progress_perc = global_clock.getTime()/task_time

        start_angle = np.pi / 2
        end_angle = start_angle + 2 * np.pi * max(0, (1 - progress_perc))

        theta = np.linspace(start_angle, end_angle, 100)

        vertices = [(radius * np.cos(t), radius * np.sin(t)) for t in theta]

        outline.vertices = vertices
  Routine instruction_hold
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    TextComponent blank_post_response_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
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    CodeComponent update_outline_cont2_2
      Code Type = Py
      Each Frame:
        progress_perc = global_clock.getTime()/task_time

        start_angle = np.pi / 2
        end_angle = start_angle + 2 * np.pi * max(0, (1 - progress_perc))

        theta = np.linspace(start_angle, end_angle, 100)

        vertices = [(radius * np.cos(t), radius * np.sin(t)) for t in theta]

        outline.vertices = vertices
  Routine instruction_decision_window
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    CodeComponent update_searchloc_2
      Code Type = Py
      Begin Routine:
        inner.depth = -3

        # ---------- probability path ----------

        # Set trial dynamics based on the tutorial type
        if current_tutorial_type == 'positive':
            p_end = 1.0   # Odds always go up to maximum
            snr_db = 51   # Very little noise

        elif current_tutorial_type == 'negative':
            p_end = 0.0   # Odds always go down to minimum
            snr_db = 51   # Very little noise

        elif current_tutorial_type == 'high_noise':
            p_end = 0.5   # Odds go to a medium value
            snr_db = 15   # A lot of noise

        # Now, recalculate the path using these scripted values
        p_lin = np.linspace(0.5, p_end, n_samples)
        noise = np.random.normal(0,
                                 np.sqrt(np.mean(p_lin**2)) / (10**(snr_db/20)),
                                 p_lin.shape)
        p_noisy = np.clip(p_lin + noise, 0, 1)

        # ---------- inner-dot radii ----------

        # other version:

        # def p_to_diameter(p, d_min, d_max):
        #     """
        #     p 0-1 → diameter with equal annulus-area steps
        #     d_min, d_max in same units as ShapeStim.size
        #     """
        #     p      = np.clip(p, 0, 1)
        #     r_min  = d_min / 2
        #     r_max  = d_max / 2
        #     r      = np.sqrt(r_min**2 + p * (r_max**2 - r_min**2))
        #     return 2 * r
        #
        # inner_radii = p_to_diameter(p_noisy, inner_r_min, inner_r_max) # careful: misnomer: actually, "r" should be "d" (diameter)

        # old version:

        # inner_radii    = inner_r_min + (inner_r_max-inner_r_min) * p_noisy

        inner_radii = pointer_len*p_noisy

        # ---------- flash schedule ----------
        on_dur        = dec_win_base + np.random.uniform(-dec_win_jitter_rng,
                                                         +dec_win_jitter_rng,
                                                         n_samples)      # ON per flash
        soa           = on_dur + flash_off_dur                          # ON + OFF
        flash_onsets  = np.cumsum(np.concatenate(([0], soa[:-1])))
        flash_offsets = flash_onsets + on_dur

        # ---------- pointer setup ------------
        angle_step     = 360 / (n_samples-1)          # CCW 9 → 3 o’clock
        pointer.pos    = (0, 0)                       # anchored at centre

        current_i      = -1                           # “no flash yet”

        sweep_dur = flash_onsets[-1] + soa[-1]
        deg_per_sec       = sweep_span / sweep_dur  # constant angular speed
      Each Frame:
        # --- Pointer Movement ---
        pointer.ori = pointer_start_angle + (deg_per_sec * t)
        pointer_blocker.ori = pointer.ori
        rewardbar.ori = pointer.ori

        # --- Flash schedule logic ---
        # This code controls when the central dot appears and disappears

        # Start the next flash
        if current_i + 1 < n_samples and t >= flash_onsets[current_i + 1]:
            current_i += 1
            rewardbar.height = inner_radii[current_i]
            rewardbar.opacity = 1
            inner.size = (inner_radii[current_i], inner_radii[current_i])
            inner.opacity = 1

        # End the current flash
        if current_i >= 0 and t >= flash_offsets[current_i]:
            inner.opacity = 0
            rewardbar.opacity = 0

        # End the trial if the sweep is complete
        if t > sum(soa):
            continueRoutine = False
    CodeComponent update_outline_cont1_2
      Code Type = Py
      Each Frame:
        progress_perc = global_clock.getTime()/task_time

        start_angle = np.pi / 2
        end_angle = start_angle + 2 * np.pi * max(0, (1 - progress_perc))

        theta = np.linspace(start_angle, end_angle, 100)

        vertices = [(radius * np.cos(t), radius * np.sin(t)) for t in theta]

        outline.vertices = vertices
    KeyboardComponent give_response_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent reminder_text
      letterHeight = letter_height
      pos = (0, -6)
      startVal [time (s)] = 0.0
      text = Press SPACE to go for the reward.
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  Routine instruction_reward_reveal
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    TextComponent current_win_text_2
      color = $element_color
      letterHeight = letter_height
      startVal [time (s)] = 0.0
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    CodeComponent calc_reward_reveal_time_2
      Code Type = Py
      Begin Routine:
        reward_reveal_time = 2.0 #changed from 1 --> 2, to allow to read added text output during instructions
        #jitter          = np.random.uniform(-0.1, +0.1)
        #reward_reveal_time += jitter
      Each Frame:
        if t > reward_reveal_time:
            continueRoutine = False
    CodeComponent calculate_reward_2
      Code Type = Py
      Begin Routine:
        # --- 1. Determine the outcome ---

        time_cutoff = sweep_dur / 2
        reward = False  # Default to a loss

        # Check if a key was pressed AT ALL
        if not give_response_2.keys:
            # This is the case where the user let the time run out
            feedback_message = "You missed the chance to respond! Try to press SPACE while the clock is running."
            # 'reward' remains False
        else:
            # A key was pressed, so now check the timing
            rt = give_response_2.rt

            if current_tutorial_type == 'positive':
                if rt > time_cutoff:
                    reward = True
                    feedback_message = "You waited for a better chance and you won. Easy money!"
                else:
                    reward = False
                    feedback_message = "You went for it early and lost. When the indicator grows, it pays to be patient."

            elif current_tutorial_type == 'negative':
                if rt < time_cutoff:
                    reward = True
                    feedback_message = "Great reaction! You won before the odds got worse."
                else:
                    reward = False
                    feedback_message = "You waited too long as your odds became slim, and you lost."

            elif current_tutorial_type == 'high_noise':
                if random.random() < 0.5:
                    reward = True
                    feedback_message = "You took a gamble in an unclear situation and it paid off!"
                else:
                    reward = False
                    feedback_message = "You took a gamble in an unclear situation and were unlucky."

        # --- 2. Update the visual text components ---
        if reward:
            current_win_text_2.text = "+ 1"
        else:
            current_win_text_2.text = "+ 0"

        # This sets the text of your feedback_text component for the routine
        feedback_text.text = feedback_message
      End Routine:
        # Hide all clock visuals AFTER the feedback has been shown,
        # ensuring the screen is clean for the next instruction page.
        pointer.setAutoDraw(False)
        pointer_blocker.setAutoDraw(False)
        outline.setAutoDraw(False)
        outline_bg.setAutoDraw(False)
        rewardbar.setAutoDraw(False)
        cross.setAutoDraw(False)
        inner.setAutoDraw(False)
    CodeComponent update_outline_cont3_2
      Code Type = Py
      Each Frame:
        progress_perc = global_clock.getTime()/task_time

        start_angle = np.pi / 2
        end_angle = start_angle + 2 * np.pi * max(0, (1 - progress_perc))

        theta = np.linspace(start_angle, end_angle, 100)

        vertices = [(radius * np.cos(t), radius * np.sin(t)) for t in theta]

        outline.vertices = vertices
    CodeComponent hide_rewardbar_2
      Code Type = Py
      Begin Routine:
        rewardbar.opacity = 0
        cross.opacity = 0
        pointer.opacity = 0
        pointer_blocker.opacity = 0
      End Routine:
        rewardbar.opacity = 1
        cross.opacity = 1
    TextComponent feedback_text
      letterHeight = letter_height
      pos = (0, -3)
      startVal [time (s)] = 0.0
      text [set every frame] = $feedback_message
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  Routine instruction_visualize_breaks
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  Routine cleanup_instruction
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    CodeComponent code
      Code Type = Auto->JS
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      Before Experiment:
        #see begin routine
      Begin Experiment:
        #see begin routine
      Begin Routine:
        # This is meant to keep the tutorial as a separate entity.
        # This could be moved to begin routine of the routine immediatly following the instruction_handler loop

        # --- Final Cleanup of all Tutorial Visuals ---
        # This ensures the tutorial leaves the screen completely clean.

        # Hide all visual components if they were created
        if 'pointer' in globals():
            pointer.setAutoDraw(False)
            pointer_blocker.setAutoDraw(False)
            outline.setAutoDraw(False)
            outline_bg.setAutoDraw(False)
            rewardbar.setAutoDraw(False)
            cross.setAutoDraw(False)
            inner.setAutoDraw(False)

        # Also ensure tutorial-specific text components are hidden
        if 'hint_text' in globals():
            hint_text.setAutoDraw(False)
        if 'feedback_text' in globals():
            feedback_text.setAutoDraw(False)

        # Make the routine end on the very next frame, making it instantaneous
        continueRoutine = False
  Routine general_instruction
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    TextComponent general_instruction_text
      letterHeight = letter_height
      pos [set every repeat] = (0, 0)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text [set every frame] = $general_instruction_pages[general_pages.thisN]
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    TextComponent general_instruction_text_cont_prompt
      letterHeight = letter_height
      pos [set every repeat] = (0, 0)
      startVal [time (s)] = 2.0
      text [set every frame] = $general_instruction_pages[general_pages.thisN]+"\n\npress button to continue"
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    KeyboardComponent general_instruction_cont
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 2.0
      store = nothing
      syncScreenRefresh = False
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    CodeComponent anchor_general_instruction_text
      Code Type = Py
      Begin Routine:
        # anchoring on top so that letters stay in place when line is added
        general_instruction_text.anchorVert = "top"
        general_instruction_text_cont_prompt.anchorVert = "top"

        # re-calculating center
        text = general_instruction_pages[general_pages.thisN]
        n_lines = len(text.split('\n'))
        text_height = letter_height*n_lines
        new_y = 0.5*text_height
        new_y *= 1.2

        print("XXXXXXXXX", n_lines, new_y)

        # apply
        general_instruction_text.pos              = (0, new_y)
        general_instruction_text_cont_prompt.pos  = (0, new_y)
  Routine tutorial_instruction
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    TextComponent tutorial_instruction_text
      letterHeight = letter_height
      pos [set every repeat] = (0, 0)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text [set every frame] = $tutorial_pages[tutorial_showcases.thisN]
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    TextComponent tutorial_instruction_text_cont_prompt
      letterHeight = letter_height
      pos [set every repeat] = (0, 0)
      startVal [time (s)] = 2.0
      text [set every frame] = $tutorial_pages[tutorial_showcases.thisN]+"\n\npress button to continue"
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    KeyboardComponent tutorial_instruction_cont
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 2.0
      store = nothing
      syncScreenRefresh = False
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    CodeComponent anchor_tutorial_instruction_text
      Code Type = Py
      Begin Routine:
        # anchoring on top so that letters stay in place when line is added
        tutorial_instruction_text.anchorVert = "top"
        tutorial_instruction_text_cont_prompt.anchorVert = "top"

        # re-calculating center
        text = tutorial_pages[tutorial_showcases.thisN]
        n_lines = len(text.split('\n'))
        text_height = letter_height*n_lines
        new_y = 0.5*text_height
        new_y *= 1.2

        # apply
        tutorial_instruction_text.pos              = (0, new_y)
        tutorial_instruction_text_cont_prompt.pos  = (0, new_y)
  Routine tutorial_wrap_up
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    TextComponent tut_wrap_up_text
      letterHeight = letter_height
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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      text:
        $(
            "That concludes our little tutorial. Good luck with collecting your riches!\n"
           f"Remember, it's in your hands how many rounds you will play during the {task_time_minutes} min.\n\n"
            "If you have any questions, you can always ask the experimenter."
        )
    TextComponent tut_wrap_up_text_cont_prompt
      letterHeight = letter_height
      saveStartStop = False
      startVal [time (s)] = 2.0
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      text:
        $(
            "That concludes our little tutorial. Good luck with collecting your riches!\n"
           f"Remember, it's in your hands how many rounds you will play during the {task_time_minutes} min.\n\n"
            "If you have any questions, you can always ask the experimenter.\n\n"
            "If you have no more questions, you can start the experiment by pressing SPACE."
        )
    KeyboardComponent tut_wrap_up_cont
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 2.0
      store = nothing
      syncScreenRefresh = False
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    CodeComponent anchor_tut_wrap_up_text
      Code Type = Py
      Begin Routine:
        # anchoring on top so that letters stay in place when line is added
        tut_wrap_up_text.anchorVert = "top"
        tut_wrap_up_text_cont_prompt.anchorVert = "top"

        # re-calculating center
        text = tut_wrap_up_text.text
        n_lines = len(text.split('\n'))
        text_height = letter_height*n_lines
        new_y = 0.5*text_height
        new_y *= 1.2

        # apply
        tut_wrap_up_text.pos              = (0, new_y)
        tut_wrap_up_text_cont_prompt.pos  = (0, new_y)
    CodeComponent disable_tutorial
      Code Type = Py
      End Routine:
        tutorial = False
  Routine final_instruction
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    TextComponent final_instruction_text
      letterHeight = letter_height
      pos [set every repeat] = (0, 0)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text [set every frame] = $final_instruction_pages[final_pages.thisN]
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    TextComponent final_instruction_text_cont_prompt
      letterHeight = letter_height
      pos [set every repeat] = (0, 0)
      startVal [time (s)] = 2.0
      text [set every frame] = $final_instruction_pages[final_pages.thisN]+"\n\npress button to continue"
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    KeyboardComponent final_instruction_cont
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 2.0
      store = nothing
      syncScreenRefresh = False
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    CodeComponent anchor_final_instruction_text
      Code Type = Py
      Begin Routine:
        # anchoring on top so that letters stay in place when line is added
        final_instruction_text.anchorVert = "top"
        final_instruction_text_cont_prompt.anchorVert = "top"

        # re-calculating center
        text = final_instruction_pages[general_pages.thisN]
        n_lines = len(text.split('\n'))
        text_height = letter_height*n_lines
        new_y = 0.5*text_height
        new_y *= 1.2

        # apply
        final_instruction_text.pos              = (0, new_y)
        final_instruction_text_cont_prompt.pos  = (0, new_y)
    CodeComponent init_task_counter
      Code Type = Py
      End Routine:
        global_clock = core.Clock()
        task_start_time = global_clock.getTime()
Flow
  Routine init_vars
  LoopInitiator general_pages loopType="TrialHandler"
    loopType = sequential
    nReps = len(general_instruction_pages)
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    Routine general_instruction
  LoopTerminator general_pages
  LoopInitiator tutorial_yn loopType="TrialHandler"
    loopType = random
    nReps = int(tutorial)
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    LoopInitiator tutorial_showcases loopType="TrialHandler"
      loopType = sequential
      nReps = len(tutorial_pages)
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      Routine tutorial_instruction
      Routine trial_baseline
      Routine reward_size_cue
      Routine decision_window
      Routine hold
      Routine reward_reveal
    LoopTerminator tutorial_showcases
    Routine tutorial_wrap_up
  LoopTerminator tutorial_yn
  Routine resting_state
  Routine TUS
  Routine resting_state
  LoopInitiator final_pages loopType="TrialHandler"
    loopType = sequential
    nReps = len(pre_task_pages)
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    Routine final_instruction
  LoopTerminator final_pages
  LoopInitiator breaks loopType="TrialHandler"
    loopType = random
    nReps = 4
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    LoopInitiator trials loopType="TrialHandler"
      loopType = random
      nReps = 10000
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      Routine trial_baseline
      Routine reward_size_cue
      Routine decision_window
      Routine hold
      Routine reward_reveal
    LoopTerminator trials
    Routine break_relax
  LoopTerminator breaks
  Routine goodbye_screen
