PsychoPy2experiment version="2023.2.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  HTML path = Documents
  Monitor = testMonitor
  Screen = 1
  Show info dlg = False
  Units = deg
  Window size (pixels) = [1920, 1080]
  color = $[-0.25,-0.25,-0.25]
  expName = BFTUS_task
  keyboardBackend = ioHub
  runMode = 1
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Routines
  Routine action_outcome_delay
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    PolygonComponent fix_cross
      fillColor = white
      saveStartStop = False
      shape = cross
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    CodeComponent set_wait_time
      Code Type = Py
      Begin Routine:
        # ranging between AO_min and AO_max seconds
        AO = AO_min + (AO_max - AO_min)*random.random()
    CodeComponent track_AO
      Code Type = Py
      Begin Routine:
        AO_clock = core.Clock()
      Each Frame:
        if AO_clock.getTime() >= AO:
            continueRoutine = False
  Routine reward_reveal
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    TextComponent current_score_text
      color = $element_color
      letterHeight = letter_height
      pos = (0, -pointer_len*1.75)
      startVal [time (s)] = 0.0
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    TextComponent current_win_text
      color = $element_color
      letterHeight = letter_height
      pos = (0, -pointer_len*1.35)
      startVal [time (s)] = 0.0
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    CodeComponent calculate_reward
      Code Type = Py
      Begin Routine:
        # TODO: yes or no based on bubble size

        if current_i + 1 > len(p_noisy):
            reward_prob = 0 # waited until end of trial
        else:
            reward_prob = p_noisy[current_i]

        rand_float = random.random()
        if rand_float > reward_prob:
            reward = False
            current_win_text.text = "NO GAIN" # ""
            bb.sendMarker(val=200)
        else:
            reward = True
            # reward_sound.play()
            current_win_text.text = f"GAIN + {reward_size_euro:.2f} €"
            money_amount += reward_size_euro
            bb.sendMarker(val=210)

        current_score_text.text = f"total: {money_amount:.2f} €"
      End Routine:
        # check if it is time for a break
        if (global_clock.getTime() - task_start_time) // block_dur > breaks_given:
            trials.finished = True
            break_pending = True
            breaks_given += 1
    CodeComponent store_reward_info
      Code Type = Py
      End Routine:
        thisExp.addData('reward', reward)
        thisExp.addData('reward_size', reward_size_euro)
        thisExp.addData('reward_chance_endpoint', p_end)
        thisExp.addData('snr_db', snr_db)

        thisExp.nextEntry()
    CodeComponent show_visual_reward
      Code Type = Py
      Begin Routine:
        coin_reveal.setImage(f"{reward_size_cent}_cent.png")

        # known values
        theta_deg     = pointer.ori                   # current orientation
        theta_rad     = np.deg2rad(theta_deg)         # → radians
        base_r        = disk_r                        # rim of the outer disk
        coin_dist     = pointer_len+coin_reveal.size[0]/2          # end of the bar

        # Cartesian coordinates  (window units = deg)
        x_base, y_base = base_r * np.cos(theta_rad), base_r * np.sin(theta_rad)
        x_coin,  y_coin  = coin_dist  * np.sin(theta_rad), coin_dist  * np.cos(theta_rad)

        coin_reveal.pos = (x_coin, y_coin)
        # coin_reveal.opacity = int(reward)
        # current_win_text.opacity = int(reward)
      End Routine:
        # pointer.setAutoDraw(False)
        # disk.setAutoDraw(False)

        pointer.setOri(270)
        inner.setAutoDraw(False)
    ImageComponent coin_reveal
      image = 2_cent.png
      interpolate = nearest
      opacity = 0
      size = (0.75, 0.75)
      startVal [time (s)] = 0.0
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    CodeComponent calc_reward_reveal_time
      Code Type = Py
      Begin Routine:
        reward_reveal_time = 1.0
        jitter          = np.random.uniform(-0.1, +0.1)
        reward_reveal_time += jitter
      Each Frame:
        if t > reward_reveal_time:
            continueRoutine = False
    CodeComponent store_GIF_reward_reveal
      Code Type = Py
      disabled = True
      Each Frame:
        win.getMovieFrame()
      End Routine:
        win.saveMovieFrames('trial_gifs/full_trial.gif')
    CodeComponent update_outline_cont3
      Code Type = Py
      Each Frame:
        progress_perc = global_clock.getTime()/task_time

        start_angle = np.pi / 2
        end_angle = start_angle + 2 * np.pi * (1 - progress_perc)

        theta = np.linspace(start_angle, end_angle, 100)

        vertices = [(radius * np.cos(t), radius * np.sin(t)) for t in theta]

        outline.vertices = vertices
  Routine goodbye_screen
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    TextComponent money_reveal_text
      color = element_color
      letterHeight = letter_height
      saveStartStop = False
      startVal [time (s)] = 0
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      text:
        The task is over.
        In this session, you have made a total of ...€. Congratulations!

        The experimenter will approach you shortly.
    KeyboardComponent quit_exp
      allowedKeys = 'e'
      forceEndRoutine = True
      startVal [time (s)] = 1.0
      store = nothing
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    CodeComponent adjust_money_amount_display
      Code Type = Py
      Each Frame:
        money_reveal_text.text = f"The task is over.\nIn this session, you have made a total of {money_amount:.2f}€. Congratulations!\n\nThe experimenter will approach you shortly."
  Routine resting_state
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    PolygonComponent fix_cross_resting_1
      fillColor = white
      saveStartStop = False
      shape = cross
      size = (pointer_len/4, pointer_len/4)
      startVal [time (s)] = 0
      stopVal [duration (s)] = $resting_dur
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  Routine general_instruction
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    VariableComponent exp_scaling_factor
      startExpValue = 2.0
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    VariableComponent pointer_start_angle
      startExpValue = 0
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    VariableComponent letter_height
      startExpValue = 0.5
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    TextComponent general_instruction_text
      letterHeight = letter_height
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = The experimenter will now provide you with further instructions.
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    KeyboardComponent continue_to_resting_T1
      allowedKeys = 'e'
      forceEndRoutine = True
      startVal [time (s)] = 0
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    VariableComponent task_time_minutes
      startExpValue = 25
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    VariableComponent n_samples
      startExpValue = 9
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    VariableComponent snr_db_levels
      startExpValue = [34] # [15, 23, 34, 51, 76]
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    VariableComponent n_reward_chance_endpoints
      startExpValue = 6
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    VariableComponent dec_win_base
      startExpValue = 0.8
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    VariableComponent dec_win_jitter_rng
      startExpValue = 0.05
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    VariableComponent flash_off_dur
      startExpValue = 0.1
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    VariableComponent disk_r
      startExpValue = 1.0
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    VariableComponent pointer_len
      startExpValue = 0.75
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    VariableComponent inner_min_frac
      startExpValue = 0.1
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    VariableComponent inner_max_frac
      startExpValue = 0.95
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    VariableComponent line_thickness
      startExpValue = 2
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    VariableComponent reward_sizes_euros
      startExpValue = [0.02, 0.05, 0.10]
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    VariableComponent money_amount
      startExpValue = 0
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    VariableComponent resting_dur
      startExpValue = 1
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    VariableComponent break_pending
      startExpValue = True
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    VariableComponent n_blocks
      startExpValue = 4
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    VariableComponent breaks_given
      startExpValue = 0
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    CodeComponent imports
      Code Type = Py
      Before Experiment:
        import random
        import numpy as np
        from psychopy import logging
    CodeComponent derive_vars
      Code Type = Py
      Begin Experiment:
        reward_chance_endpoints = np.linspace(0, 1, n_reward_chance_endpoints)

        block_dur = (task_time_minutes * 60)//n_blocks

        # apply global visual scaling factor

        line_thickness *= exp_scaling_factor
        pointer_len    *= exp_scaling_factor
        disk_r         *= exp_scaling_factor

        px_per_deg = win.size[0] / win.monitor.getWidth()   # ≈ 21 px/deg for your setup
        w_deg = (line_thickness/2) / px_per_deg                 # 3 px  → 0.14 deg

        # utility function
        def hex_to_psychopy_rgb(hexcode):
            hexcode = hexcode.lstrip('#')
            if len(hexcode) == 3:                       # allow shorthand
                hexcode = ''.join(ch*2 for ch in hexcode)
            if len(hexcode) != 6:
                raise ValueError('hex must be 3 or 6 digits')
            return [int(hexcode[i:i+2],16)/127.5-1 for i in (0,2,4)]
    CodeComponent start_exp_counter
      Code Type = Py
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      End Routine:
        global_clock = core.Clock()
        task_start_time = global_clock.getTime()
        task_time = task_time_minutes * 60  # convert to seconds
    VariableComponent element_color
      startExpValue = 0.75, 0.75, 0.75
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    VariableComponent sweep_span
      startExpValue = 360
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    VariableComponent progress_perc
      startExpValue = 0
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    CodeComponent init_EEG
      Code Type = Py
      Begin Experiment:
        class CLIMarker:

            def __init__(self):
                pass

            def sendMarker(self, val=20):
                print("marker received: ", val)

        from rusocsci import buttonbox

        try:
            bb = buttonbox.Buttonbox(port="COM1")
            bb.sendMarker(val=1)
        except:
            print("WARNING: no EEG device connected/detected - falling back to command line printing instead")
            bb = CLIMarker()
    VariableComponent break_dur
      startExpValue = 30
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  Routine task_instruction
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    TextComponent task_instruction_text
      letterHeight = letter_height
      startVal [time (s)] = 0.0
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      text:
        In the following task, you will see bubbles gradually emerging from the water.
        Press SPACE when you want to reach for the current reward.
        (bronze: lowest reward; silver: medium reward; gold: highest reward).

        The larger the bubble, the more likely to obtain a reward.
        Try to maximize your earnings within the 25-minute task.
    TextComponent continue_to_task
      letterHeight = letter_height
      startVal [time (s)] = 3.0
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      text:
        press SPACE to continue
    KeyboardComponent go_to_task
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 3.0
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  Routine TUS
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    PolygonComponent fix_cross_TUS
      fillColor = white
      shape = cross
      size = (pointer_len/4, pointer_len/4)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1
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  Routine experimenter_input
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    TextComponent waiting_for_input_text
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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    KeyboardComponent experimenter_continue
      allowedKeys = 'e'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine break_rest
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    TextComponent break_text
      color = $element_color
      letterHeight = letter_height
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $resting_dur
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      text:
        Short break!

        Please take a moment to actively relax, before we continue in...
    TextComponent break_counter
      color = $element_color
      letterHeight = letter_height
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $break_dur
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    CodeComponent update_break_time_remain
      Code Type = Py
      Begin Routine:
        if not break_pending:
            continueRoutine = False  # skip break if not flagged
        else:
            break_pending = False  # reset break flag
            total_time = 0  # reset total_time for next block
      Each Frame:
        break_counter.text = f"\n\n\n\n{int(resting_dur + 1 - t)}"
    CodeComponent hide_pointer_outline
      Code Type = Py
      Begin Routine:
        pointer.opacity = 0
        pointer_blocker.opacity = 0
        outline.opacity = 0
        outline_bg.opacity = 0
        rewardbar.opacity = 0
        cross.opacity = 0
      End Routine:
        pointer.opacity = 1
        pointer_blocker.opacity = 1
        outline.opacity = 1
        outline_bg.opacity = 1
        cross.opacity = 1
  Routine baseline_blink
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    CodeComponent calc_baseline_time_2
      Code Type = Py
      Begin Routine:
        baseline_time = 1.2
        jitter          = np.random.uniform(-0.2, +0.2)
        baseline_time += jitter
      Each Frame:
        if t > baseline_time:
            continueRoutine = False
    PolygonComponent fix_cross_baseline_2
      fillColor = $element_color
      lineColor = None
      opacity = 0
      shape = cross
      size = (disk_r/2, disk_r/2)
      startVal [time (s)] = 0.0
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  Routine reward_size_cue
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    TextComponent blank_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.6
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    CodeComponent setup_inner
      Code Type = Py
      Begin Experiment:
        # Begin Experiment
        inner = visual.ShapeStim(
                win=win, name='inner',
                size=(0,0), vertices='circle',
                ori=0.0, pos=(0, 0), anchor='center',
                lineWidth=line_thickness,     colorSpace='rgb',  lineColor=None, fillColor=element_color,
                opacity=None, depth=0.0, interpolate=True)

        inner.depth = -3

        px_per_deg     = win.size[0] / win.monitor.getWidth()
        usable_r       = disk_r - (line_thickness/2) / px_per_deg
        inner_r_min    = inner_min_frac * usable_r
        inner_r_max    = inner_max_frac * usable_r
      Begin Routine:
        inner.setAutoDraw(False)
        inner_radius_start = inner_r_min + (inner_r_max-inner_r_min) * 0.5
        inner.size  = (inner_radius_start, inner_radius_start)
        inner.opacity = 1
    CodeComponent set_reward_size
      Code Type = Py
      Begin Experiment:
        cent_colors = {
            10: [ 1.0,  0.68, -1.0 ],
            5:  [ 0.5,  0.5,  0.5  ],
            2: [ 0.6,  0.0, -0.6  ]
            }


        """
        cent_colors = {
            10: hex_to_psychopy_rgb("#D4B03E"),
            5: hex_to_psychopy_rgb("#B0B0B4"),
            2: hex_to_psychopy_rgb("#D1A679")

            }
        """
      Begin Routine:
        reward_size_euro = random.choice(reward_sizes_euros)
        reward_size_cent = int(reward_size_euro*100)

        bb.sendMarker(val=100+reward_size_cent)

        inner.color = cent_colors[reward_size_cent]
        rewardbar.color = cent_colors[reward_size_cent]

        pointer.opacity = 1
        pointer_blocker.opacity = 1
    CodeComponent store_GIF_reward_size_cue
      Code Type = Py
      disabled = True
      Each Frame:
        win.getMovieFrame()
      End Routine:
        # win.saveMovieFrames('trial_gifs/2_reward_size_cue.gif')
    CodeComponent update_outline
      Code Type = Py
      Each Frame:
        progress_perc = global_clock.getTime()/task_time

        start_angle = np.pi / 2
        end_angle = start_angle + 2 * np.pi * (1 - progress_perc)

        theta = np.linspace(start_angle, end_angle, 100)

        vertices = [(radius * np.cos(t), radius * np.sin(t)) for t in theta]

        outline.vertices = vertices
  Routine decision_window
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    CodeComponent track_exp_time
      Code Type = Py
      Each Frame:
        if global_clock.getTime() >= task_time:
            trials.finished = True
            continueRoutine = False
    CodeComponent update_searchloc
      Code Type = Py
      Begin Routine:
        inner.depth = -3

        # ---------- probability path ----------
        p_end          = random.choice(reward_chance_endpoints)
        p_lin          = np.linspace(0.5, p_end, n_samples)
        snr_db         = random.choice(snr_db_levels)
        noise          = np.random.normal(0,
                             np.sqrt(np.mean(p_lin**2)) / (10**(snr_db/20)),
                             p_lin.shape)
        p_noisy        = np.clip(p_lin + noise, 0, 1)

        # ---------- inner-dot radii ----------

        # other version:

        # def p_to_diameter(p, d_min, d_max):
        #     """
        #     p 0-1 → diameter with equal annulus-area steps
        #     d_min, d_max in same units as ShapeStim.size
        #     """
        #     p      = np.clip(p, 0, 1)
        #     r_min  = d_min / 2
        #     r_max  = d_max / 2
        #     r      = np.sqrt(r_min**2 + p * (r_max**2 - r_min**2))
        #     return 2 * r
        #
        # inner_radii = p_to_diameter(p_noisy, inner_r_min, inner_r_max) # careful: misnomer: actually, "r" should be "d" (diameter)

        # old version:

        # inner_radii    = inner_r_min + (inner_r_max-inner_r_min) * p_noisy

        inner_radii = pointer_len*p_noisy

        # ---------- flash schedule ----------
        on_dur        = dec_win_base + np.random.uniform(-dec_win_jitter_rng,
                                                         +dec_win_jitter_rng,
                                                         n_samples)      # ON per flash
        soa           = on_dur + flash_off_dur                          # ON + OFF
        flash_onsets  = np.cumsum(np.concatenate(([0], soa[:-1])))
        flash_offsets = flash_onsets + on_dur

        # ---------- pointer setup ------------
        angle_step     = 360 / (n_samples-1)          # CCW 9 → 3 o’clock
        pointer.pos    = (0, 0)                       # anchored at centre

        current_i      = -1                           # “no flash yet”

        sweep_dur = flash_onsets[-1] + soa[-1]
        deg_per_sec       = sweep_span / sweep_dur  # constant angular speed
      Each Frame:
        pointer.ori   = pointer_start_angle + deg_per_sec * t          # continuous CCW sweep
        pointer_blocker.ori   = pointer_start_angle + deg_per_sec * t
        rewardbar.ori = pointer_start_angle + deg_per_sec * t
        # cross.ori = pointer_start_angle + deg_per_sec * t

        pointer.pos   = (0, 0)
        rewardbar.pos = (0, 0)

        # t = Builder’s routine clock

        # ------- start next flash -----------
        if current_i + 1 < n_samples and t >= flash_onsets[current_i + 1]:

            bb.sendMarker(val=110 + int(p_end*10))

            current_i += 1

            # inner rewardbar appears
            rewardbar.height = inner_radii[current_i]
            rewardbar.opacity = 1

            # inner-dot appears
            inner.size  = (inner_radii[current_i], inner_radii[current_i])
            inner.opacity = 1

        # ------- end flash ------------------
        if current_i >= 0 and t >= flash_offsets[current_i]:
            inner.opacity = 0      # hide inner dot
            rewardbar.opacity = 0

        # ------- end trial ----------------------------------------
        if t > sum(soa):
            current_i += 1
            continueRoutine = False
    TextComponent DEBUG
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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    KeyboardComponent give_response
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent store_DVs
      Code Type = Py
      End Routine:
        thisExp.addData('rt_ms', t*1000)
        thisExp.addData('sample_ind', int(current_i))
        if current_i + 1 <= n_samples:
            thisExp.addData('likelihood', p_noisy[current_i])
        else:
            thisExp.addData('likelihood', 0)
        thisExp.addData('likelihoods', list(p_noisy))
    CodeComponent store_GIF_decision_window
      Code Type = Py
      disabled = True
      Each Frame:
        win.getMovieFrame()
      End Routine:
        # win.saveMovieFrames('trial_gifs/3_decision_window.gif')
    CodeComponent update_outline_cont1
      Code Type = Py
      Each Frame:
        progress_perc = global_clock.getTime()/task_time

        start_angle = np.pi / 2
        end_angle = start_angle + 2 * np.pi * (1 - progress_perc)

        theta = np.linspace(start_angle, end_angle, 100)

        vertices = [(radius * np.cos(t), radius * np.sin(t)) for t in theta]

        outline.vertices = vertices
    CodeComponent trigger_action_decision
      Code Type = Py
      End Routine:
        bb.sendMarker(val=220)
  Routine hold
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    TextComponent blank_post_response
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
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    CodeComponent store_GIF_hold
      Code Type = Py
      disabled = True
      Each Frame:
        win.getMovieFrame()
      End Routine:
        # win.saveMovieFrames('trial_gifs/4_hold.gif')
    CodeComponent update_outline_cont2
      Code Type = Py
      Each Frame:
        progress_perc = global_clock.getTime()/task_time

        start_angle = np.pi / 2
        end_angle = start_angle + 2 * np.pi * (1 - progress_perc)

        theta = np.linspace(start_angle, end_angle, 100)

        vertices = [(radius * np.cos(t), radius * np.sin(t)) for t in theta]

        outline.vertices = vertices
  Routine trial_baseline
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    CodeComponent calc_progress_perc
      Code Type = Py
      Begin Routine:
        progress_perc = global_clock.getTime()/task_time
    CodeComponent calc_baseline_time
      Code Type = Py
      Begin Routine:
        baseline_time = 1.5
        jitter          = np.random.uniform(-0.1, +0.1)
        baseline_time += jitter
      Each Frame:
        if t > baseline_time:
            continueRoutine = False
    CodeComponent show_disk
      Code Type = Py
      Begin Routine:
        # disk.setAutoDraw(True)
    PolygonComponent fix_cross_baseline
      fillColor = $element_color
      lineColor = None
      opacity = 0
      shape = cross
      size = (disk_r/2, disk_r/2)
      startVal [time (s)] = 0.0
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    CodeComponent setup_pointer
      Code Type = Py
      Begin Experiment:
        # Begin Experiment
        pointer = visual.Rect(win, width=w_deg, height=pointer_len,
                              anchor='bottom-center', fillColor=element_color, ori=pointer_start_angle)

        pointer_blocker = visual.Rect(win, width=w_deg*3, height=pointer_len*0.9,
                              anchor='bottom-center', fillColor=(-0.25,-0.25,-0.25), ori=pointer_start_angle)

        pointer.depth = -1
        pointer_blocker.depth = -2
      Begin Routine:
        pointer.setOri(pointer_start_angle)
        pointer.setAutoDraw(True)
        pointer.opacity = 0

        pointer_blocker.setOri(pointer_start_angle)
        pointer_blocker.setAutoDraw(True)
        pointer_blocker.opacity = 0
    CodeComponent setup_outline
      Code Type = Py
      Begin Experiment:
        outline = visual.ShapeStim(
                win=win, name='outline',
                size=(pointer_len*2,pointer_len*2),
                # size=(disk_r*inner_max_frac,disk_r*inner_max_frac),
                vertices='circle',
                ori=0.0, pos=(0, 0), anchor='center',
                lineWidth=line_thickness/2,     colorSpace='rgb',  lineColor=element_color, fillColor=None,
                opacity=None, depth=0.0, interpolate=True)

        outline_bg = visual.ShapeStim(
                win=win, name='outline',
                size=(pointer_len*2,pointer_len*2),
                # size=(disk_r*inner_max_frac,disk_r*inner_max_frac),
                vertices='circle',
                ori=0.0, pos=(0, 0), anchor='center',
                lineWidth=line_thickness/2,     colorSpace='rgb',  lineColor=[e*0.5 for e in element_color], fillColor=None,
                opacity=None, depth=0.0, interpolate=True)

        outline.closeShape = False

        # TODO maybe have to set depth to specific value, e.g.:
        outline.depth = -7
        outline_bg.depth = - 6
      Begin Routine:
        outline.setOri(pointer_start_angle)
        outline.setAutoDraw(True)

        outline_bg.setOri(pointer_start_angle)
        outline_bg.setAutoDraw(True)
      Each Frame:
        progress_perc = global_clock.getTime()/task_time

        start_angle = np.pi / 2
        end_angle = start_angle + 2 * np.pi * (1 - progress_perc)

        theta = np.linspace(start_angle, end_angle, 100)
        radius = pointer_len
        vertices = [(radius * np.cos(t), radius * np.sin(t)) for t in theta]

        outline.vertices = vertices
        outline.size = (1,1)
    CodeComponent store_GIF_baseline
      Code Type = Py
      disabled = True
      Each Frame:
        win.getMovieFrame()
      End Routine:
        # win.saveMovieFrames('trial_gifs/1_baseline.gif')
    ProgressComponent time_left
      borderColor = white
      disabled = True
      fillColor = None
      pos = (0, -1)
      progress [set every repeat] = 0.5
      size = (1.0, letter_height/2)
      startVal [time (s)] = 0
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    PolygonComponent time_left_bar_frame
      disabled = True
      fillColor = None
      pos = (0, -1)
      shape = rectangle
      size = (1.0, letter_height/2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    PolygonComponent time_left_bar
      anchor = center-left
      disabled = True
      fillColor = white
      lineColor = None
      pos = (-1.0/2, -1)
      shape = rectangle
      size [set every frame] = (1.0*(1 - progress_perc), letter_height/2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    CodeComponent setup_rewardbar
      Code Type = Py
      Begin Experiment:
        # Begin Experiment
        rewardbar = visual.Rect(win, width=w_deg*3, height=pointer_len*0.5,
                              anchor='bottom-center', fillColor=element_color, ori=pointer_start_angle)

        rewardbar.depth = -3
      Begin Routine:
        rewardbar.setOri(pointer_start_angle)
        rewardbar.setAutoDraw(True)

        rewardbar.opacity = 0
      End Routine:
        rewardbar.ori = pointer_start_angle
        rewardbar.height = pointer_len*0.5
        rewardbar.opacity = 1
    CodeComponent setup_crosshair
      Code Type = Py
      Begin Experiment:
        cross = visual.ShapeStim(
            win=win, name='fix_cross_baseline', vertices='cross',
            size=(pointer_len/4, pointer_len/4),
            ori=0.0, pos=(0, 0), anchor='center',
            lineWidth=0,     colorSpace='rgb',  lineColor=None, fillColor=element_color,
            depth=10.0, interpolate=True)

        cross.depth = -4
      Begin Routine:
        cross.setAutoDraw(True)
        cross.ori = pointer_start_angle
    CodeComponent trigger_trial_baseline_start
      Code Type = Py
      Begin Routine:
        bb.sendMarker(val=10)
Flow
  Routine general_instruction
  Routine resting_state
  Routine TUS
  Routine resting_state
  Routine task_instruction
  LoopInitiator breaks loopType="TrialHandler"
    loopType = random
    nReps = 4
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    LoopInitiator trials loopType="TrialHandler"
      loopType = random
      nReps = 10000
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      Routine trial_baseline
      Routine reward_size_cue
      Routine decision_window
      Routine hold
      Routine reward_reveal
    LoopTerminator trials
    Routine break_rest
  LoopTerminator breaks
  Routine goodbye_screen
